private function BatchAliquot( variable NrStacks ) void ;
private function HeatAndQC( variable mock_heating ) void ;
private function MasterMixPreparation( variable plates ) void ;
private function OnStart(  ) void ;
private function QCAliquotMini(  ) void ;
private function QCAliquotMiniOldV1(  ) void ;
private function QCAliquotWIP(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  HSLHamHeaterShaker::StopTempCtrl(heaterID);
  HSLHamHeaterShaker::Terminate();
  EASYPICK::INIT::DeInit();
}

private function HeatAndQC( variable mock_heating ) void {
  private timer Incubation;
  if (mock_heating == "1")
  {
    if(0){
      HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 2, heaterID);
      EASYPICK::INIT::Init(ML_STAR, 1, 1);
      EASYPICK_HELPER::EasyStep_Init(ML_STAR, EASYPICK::_HSLTRUE);
    }
    HSLHamHeaterShaker::StartTempCtrl(heaterID, 68, 1);
    if(0){
      EASYPICK_HELPER::Camera_Place_to_BacterialPlate(ML_STAR, Translate("Nun_96_Fl_Hb_0001"));
      EASYPICK::APPLICATION::PictureFile_Take(Translate("D:\beforeHeat.png"), 100, EASYPICK::PICTUREFILE::SAVEFORMAT::_PNG, EASYPICK::PICTUREFILE::COLORMODE::_COLOR);
    }
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  if( 0 == Incubation.SetTimer(1800) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == Incubation.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if (mock_heating == "1")
  {
    HSLHamHeaterShaker::StopTempCtrl(heaterID);
    HSLHamHeaterShaker::Terminate();
  }
  {
    	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
  }
  if(0){
    EASYPICK_HELPER::Camera_Place_to_BacterialPlate(ML_STAR, Translate("Nun_96_Fl_Hb_0001"));
    EASYPICK::APPLICATION::PictureFile_Take(Translate("D:\afterHeat.png"), 100, EASYPICK::PICTUREFILE::SAVEFORMAT::_PNG, EASYPICK::PICTUREFILE::COLORMODE::_COLOR);
  }
}

private function QCAliquotWIP(  ) void {
  ML_STAR.QC_Plate_Col_1.SetCount(2);
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", -1);
  PTL::SetPipettingState("InitializeChannelVariable", "");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
  PTL::SetPipettingState("TipEjectChannelVariable", "");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 2);
  PTL::SetPipettingState("AspirateChannelVariable", "");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 5);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.MasterMixX8, ML_STAR.QC_Plate_Col_1, 1, 1, 22, 0, 2, hslInfinite, hslInfinite, 1, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", -1);
  PTL::SetPipettingState("InitializeChannelVariable", "");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
  PTL::SetPipettingState("TipEjectChannelVariable", "");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 2);
  PTL::SetPipettingState("AspirateChannelVariable", "");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 5);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.MasterMixX8, ML_STAR.QC_Plate_Col_1, 1, 1, 22, 0, 2, hslInfinite, hslInfinite, 1, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  if(0){
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.QC_Plate_Col_1, ML_STAR.QC_Plate_Col_2, 1, 1, 2, 0, 1, hslInfinite, hslInfinite, 1, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseSurface_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
    PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
    PTL::SetPipettingState("AspiratePrerinsingMixVolume", 10);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 3);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseSurface_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
    PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
    PTL::SetPipettingState("DispensePrerinsingMixVolume", 10);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.waterX8, ML_STAR.QC_Plate_Col_2, 1, 1, 2, 0, 1, hslInfinite, hslInfinite, 1, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.QC_Plate_Col_2, ML_STAR.QC_Plate_Col_3, 1, 1, 2, 0, 1, hslInfinite, hslInfinite, 1, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseSurface_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 3);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseSurface_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
    PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
    PTL::SetPipettingState("DispensePrerinsingMixVolume", 10);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.waterX8, ML_STAR.QC_Plate_Col_3, 1, 1, 20, 0, 1, hslInfinite, hslInfinite, 1, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.QC_Plate_Col_3, ML_STAR.QC_Plate_Col_4, 1, 1, 2, 0, 1, hslInfinite, hslInfinite, 1, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseSurface_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 3);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseSurface_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    PTL::SetPipettingState("DispensePrerinsingMixCycles", 2);
    PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
    PTL::SetPipettingState("DispensePrerinsingMixVolume", 10);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.waterX8, ML_STAR.QC_Plate_Col_4, 1, 1, 20, 0, 1, hslInfinite, hslInfinite, 1, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", -1);
    PTL::SetPipettingState("InitializeChannelVariable", "");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
    PTL::SetPipettingState("TipEjectChannelVariable", "");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.QC_Plate_Col_4, ML_STAR.QC_Plate_Col_5, 1, 1, 2, 0, 1, hslInfinite, hslInfinite, 1, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
  }
}

private function BatchAliquot( variable NrStacks ) void {
  private sequence AliquotSeq[];
  private sequence stackSeqs[];
  private variable AliquotNrPlates;
  private variable Stack;
  private variable CurPosInStackSeqs;
  private variable NumberOfSeq;
  private variable CurSeq;
  private variable CurStackDepth;
  stackSeqs.SetSize(0);
  if (NrStacks >= 1)
  {
    stackSeqs.AddAsLast(ML_STAR.Stack_1_0005);
    stackSeqs.AddAsLast(ML_STAR.Stack_1_0004);
    stackSeqs.AddAsLast(ML_STAR.Stack_1_0003);
    stackSeqs.AddAsLast(ML_STAR.Stack_1_0002);
    stackSeqs.AddAsLast(ML_STAR.Stack_1_0001);
  }
  if (NrStacks == 5)
  {
    stackSeqs.AddAsLast(ML_STAR.Stack_2_0005);
    stackSeqs.AddAsLast(ML_STAR.Stack_2_0004);
    stackSeqs.AddAsLast(ML_STAR.Stack_2_0003);
    stackSeqs.AddAsLast(ML_STAR.Stack_2_0002);
    stackSeqs.AddAsLast(ML_STAR.Stack_2_0001);
    stackSeqs.AddAsLast(ML_STAR.Stack_3_0005);
    stackSeqs.AddAsLast(ML_STAR.Stack_3_0004);
    stackSeqs.AddAsLast(ML_STAR.Stack_3_0003);
    stackSeqs.AddAsLast(ML_STAR.Stack_3_0002);
    stackSeqs.AddAsLast(ML_STAR.Stack_3_0001);
    stackSeqs.AddAsLast(ML_STAR.Stack_4_0005);
    stackSeqs.AddAsLast(ML_STAR.Stack_4_0004);
    stackSeqs.AddAsLast(ML_STAR.Stack_4_0003);
    stackSeqs.AddAsLast(ML_STAR.Stack_4_0002);
    stackSeqs.AddAsLast(ML_STAR.Stack_4_0001);
    stackSeqs.AddAsLast(ML_STAR.Stack_5_0005);
    stackSeqs.AddAsLast(ML_STAR.Stack_5_0004);
    stackSeqs.AddAsLast(ML_STAR.Stack_5_0003);
    stackSeqs.AddAsLast(ML_STAR.Stack_5_0002);
    stackSeqs.AddAsLast(ML_STAR.Stack_5_0001);
  }
  NumberOfSeq=AliquotSeq.GetSize();
  AliquotSeq.SetSize(0);
  if (0 == 1)
  {
  }
  else
  {
    AliquotSeq.AddAsLast(ML_STAR.Nun_96_Fl_Hb_0001);
    AliquotSeq.AddAsLast(ML_STAR.Nun_96_Fl_Hb_0002);
    AliquotSeq.AddAsLast(ML_STAR.Nun_96_Fl_Hb_0003);
    AliquotSeq.AddAsLast(ML_STAR.Nun_96_Fl_Hb_0004);
    AliquotSeq.AddAsLast(ML_STAR.Nun_96_Fl_Hb_0005);
  }
  AliquotNrPlates=AliquotSeq.GetSize();
  {
    	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
  }
  {
    	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
  }
  {
    for(Stack = 0; Stack < NrStacks;)
    {
      Stack = Stack + 1;
      CurPosInStackSeqs = 0;
      CurStackDepth = 0;
      if(0){
        {
          for(CurSeq = 0; CurSeq < AliquotNrPlates;)
          {
            CurSeq = CurSeq + 1;
            CurPosInStackSeqs=(Stack-1)*AliquotNrPlates+(CurSeq);
            {
              	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
            }
          }
        }
        PTL::ResetPipettingStateAndSequences("");
        PTL::SetPipettingState("UserResponseTime", hslInfinite);
        PTL::SetPipettingState("ErrorHandling", 3);
        PTL::SetPipettingState("TipCountingEnabled", hslFalse);
        PTL::SetPipettingState("TipCountingIdentifier", "");
        PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
        PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
        PTL::SetPipettingState("CalibrateCarrierChannel", -1);
        PTL::SetPipettingState("InitializeChannelVariable", "");
        PTL::SetPipettingState("InitializeEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupChannelVariable", "");
        PTL::SetPipettingState("TipPickupEnabled", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
        PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
        PTL::SetPipettingState("TipEjectChannelVariable", "");
        PTL::SetPipettingState("AspirateMode", 0);
        PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
        PTL::SetPipettingState("AspirateFluidHeight", 0);
        PTL::SetPipettingState("AspirateSubmergeDepth", 2);
        PTL::SetPipettingState("AspirateChannelVariable", "");
        PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
        PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
        PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
        PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Part");
        PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
        PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
        PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
        PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
        PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseSubmergeDepth", 0);
        PTL::SetPipettingState("DispenseChannelVariable", "");
        PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
        PTL::SetPipettingState("DispenseFluidHeight", 5);
        PTL::SetPipettingState("DispenseMode", 1);
        PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
        PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Part");
        PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
        PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
        PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
        PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
        PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
        PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
        PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
        PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
        PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
        PTL::SetPipettingState("AliquotEnabled", hslTrue);
        PTL::SetPipettingState("AliquotPreAspirateVolume", 0);
        PTL::SetPipettingState("AliquotAspirateDefaultMixingEnabled", hslTrue);
        if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.MasterMixX8, ML_STAR.AliquotX5, 1, 1, 16, 0, 2, hslInfinite, hslInfinite, hslInfinite, "") )
        {
              PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
        }
      }
      {
        for(CurSeq = 0; CurSeq < AliquotNrPlates;)
        {
          CurSeq = CurSeq + 1;
          CurStackDepth = AliquotNrPlates-(CurSeq-1);
          CurPosInStackSeqs=(Stack-1)*AliquotNrPlates+CurStackDepth;
          {
            	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
          }
        }
      }
    }
  }
}

private function MasterMixPreparation( variable plates ) void {
  private variable water_aspiration_vols;
  private variable f3_b3_aspiration_vols;
  private variable fip_bip_aspiration_vols;
  private variable water_vol;
  private variable lf_bf_aspiration_vols;
  private variable reactions;
  private variable neb_lamp_vol;
  private variable guanidine_vol;
  private variable n2_primer_mix_vol;
  private dialog dialogHandle_1;
  reactions = 100 * plates;
  reactions_with_slack = reactions + 60;
  if(0){
    fip_bip_aspiration_vols = 0.4 * reactions;
    f3_b3_aspiration_vols = 0.05 * reactions;
    lf_bf_aspiration_vols = 0.2 * reactions;
    water_aspiration_vols = 1.2 * reactions;
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", 1);
    PTL::SetPipettingState("InitializeChannelVariable", "10000000");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "10000000");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
    PTL::SetPipettingState("TipEjectChannelVariable", "10000000");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "10000000");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
    PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
    PTL::SetPipettingState("AspiratePrerinsingMixVolume", 20);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "10000000");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.N2_FIP_BIP, ML_STAR.N2_Primer_Mix, 2, 1, fip_bip_aspiration_vols, 0, 1, 1, 1, hslInfinite, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", 1);
    PTL::SetPipettingState("InitializeChannelVariable", "10000000");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "10000000");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
    PTL::SetPipettingState("TipEjectChannelVariable", "10000000");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "10000000");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
    PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
    PTL::SetPipettingState("AspiratePrerinsingMixVolume", 20);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "10000000");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.N2_F3_B3, ML_STAR.N2_Primer_Mix, 2, 1, f3_b3_aspiration_vols, 0, 1, 1, 1, hslInfinite, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", 1);
    PTL::SetPipettingState("InitializeChannelVariable", "10000000");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "10000000");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
    PTL::SetPipettingState("TipEjectChannelVariable", "10000000");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "10000000");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
    PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
    PTL::SetPipettingState("AspiratePrerinsingMixVolume", 20);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "10000000");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.N2_LF_LB, ML_STAR.N2_Primer_Mix, 2, 1, lf_bf_aspiration_vols, 0, 1, 1, 1, hslInfinite, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
    PTL::ResetPipettingStateAndSequences("");
    PTL::SetPipettingState("UserResponseTime", hslInfinite);
    PTL::SetPipettingState("ErrorHandling", 3);
    PTL::SetPipettingState("TipCountingEnabled", hslFalse);
    PTL::SetPipettingState("TipCountingIdentifier", "");
    PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
    PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
    PTL::SetPipettingState("CalibrateCarrierChannel", 1);
    PTL::SetPipettingState("InitializeChannelVariable", "10000000");
    PTL::SetPipettingState("InitializeEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupChannelVariable", "10000000");
    PTL::SetPipettingState("TipPickupEnabled", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
    PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
    PTL::SetPipettingState("TipEjectChannelVariable", "10000000");
    PTL::SetPipettingState("AspirateMode", 0);
    PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
    PTL::SetPipettingState("AspirateFluidHeight", 0);
    PTL::SetPipettingState("AspirateSubmergeDepth", 2);
    PTL::SetPipettingState("AspirateChannelVariable", "10000000");
    PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
    PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
    PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
    PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
    PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
    PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
    PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
    PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
    PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
    PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
    PTL::SetPipettingState("AspiratePrerinsingMixVolume", 20);
    PTL::SetPipettingState("DispenseSubmergeDepth", 0);
    PTL::SetPipettingState("DispenseChannelVariable", "10000000");
    PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
    PTL::SetPipettingState("DispenseFluidHeight", 5);
    PTL::SetPipettingState("DispenseMode", 1);
    PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
    PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
    PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
    PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
    PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
    PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
    PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
    PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
    PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
    PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
    PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
    if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.water, ML_STAR.N2_Primer_Mix, 2, 1, water_aspiration_vols, 0, 1, 1, 1, hslInfinite, "") )
    {
          PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
    }
  }
  neb_lamp_vol = 12.5 * reactions_with_slack;
  n2_primer_mix_vol = 2.5 * reactions_with_slack;
  guanidine_vol = 2.5 * reactions_with_slack;
  water_vol = 2.5 * reactions_with_slack;
  if(0){
    printing_variable = ML_STAR.NEB_LAMP_Mix.GetCurrentPosition();
  }
  dialogHandle_1.SetOutput(Translate("neb_lamp_vol: "), neb_lamp_vol, "\n", Translate("n2_primer_mix_vol: "), n2_primer_mix_vol, "\n", Translate("guanidine_vol: "), guanidine_vol, "\n", Translate("water_vol: "), water_vol, "\n", Translate("mineral_oil_vol:"), Translate(" 150 uL (fixed)"), "\n", Translate("pos_control_vol:"), Translate(" 150 uL (fixed)"), "\n");
  dialogHandle_1.ShowOutput(Translate("Reagents needed"), hslOKCancel | hslInformation | hslDefButton1, hslInfinite);
  neb_lamp_vol = 12.5 * reactions;
  n2_primer_mix_vol = 2.5 * reactions;
  guanidine_vol = 2.5 * reactions;
  water_vol = 2.5 * reactions;
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", 1);
  PTL::SetPipettingState("InitializeChannelVariable", "10000000");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "10000000");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
  PTL::SetPipettingState("TipEjectChannelVariable", "10000000");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 2);
  PTL::SetPipettingState("AspirateChannelVariable", "10000000");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
  PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
  PTL::SetPipettingState("AspiratePrerinsingMixVolume", 20);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "10000000");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 5);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.NEB_LAMP_Mix, ML_STAR.MasterMix, 1, 1, neb_lamp_vol, 0, 1, 1, 1, hslInfinite, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", 1);
  PTL::SetPipettingState("InitializeChannelVariable", "10000000");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "10000000");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
  PTL::SetPipettingState("TipEjectChannelVariable", "10000000");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 2);
  PTL::SetPipettingState("AspirateChannelVariable", "10000000");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
  PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
  PTL::SetPipettingState("AspiratePrerinsingMixVolume", 20);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "10000000");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 5);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.N2_Primer_Mix, ML_STAR.MasterMix, 1, 1, n2_primer_mix_vol, 0, 1, 1, 1, hslInfinite, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", 1);
  PTL::SetPipettingState("InitializeChannelVariable", "10000000");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "10000000");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
  PTL::SetPipettingState("TipEjectChannelVariable", "10000000");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 2);
  PTL::SetPipettingState("AspirateChannelVariable", "10000000");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
  PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
  PTL::SetPipettingState("AspiratePrerinsingMixVolume", 20);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "10000000");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 5);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.Guanidine, ML_STAR.MasterMix, 1, 1, guanidine_vol, 0, 1, 1, 1, hslInfinite, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", 1);
  PTL::SetPipettingState("InitializeChannelVariable", "10000000");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "10000000");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslFalse);
  PTL::SetPipettingState("TipEjectChannelVariable", "10000000");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 2);
  PTL::SetPipettingState("AspirateChannelVariable", "10000000");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("AspiratePrerinsingMixCycles", 2);
  PTL::SetPipettingState("AspiratePrerinsingMixPosition", 1);
  PTL::SetPipettingState("AspiratePrerinsingMixVolume", 20);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "10000000");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 5);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.water, ML_STAR.MasterMix, 1, 1, water_vol, 0, 1, 1, 1, hslInfinite, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
}

private function QCAliquotMini(  ) void {
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", -1);
  PTL::SetPipettingState("InitializeChannelVariable", "");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
  PTL::SetPipettingState("TipEjectChannelVariable", "");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 1);
  PTL::SetPipettingState("AspirateChannelVariable", "");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Serum_DispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 1);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Serum_DispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.MasterMix, ML_STAR.QC_Pos, 1, 1, 98, 0, 2, hslInfinite, hslInfinite, hslInfinite, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", -1);
  PTL::SetPipettingState("InitializeChannelVariable", "");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
  PTL::SetPipettingState("TipEjectChannelVariable", "");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 1);
  PTL::SetPipettingState("AspirateChannelVariable", "");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Serum_DispenseSurface_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 1);
  PTL::SetPipettingState("DispenseMode", 3);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Serum_DispenseSurface_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  PTL::SetPipettingState("DispensePrerinsingMixCycles", 1);
  PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
  PTL::SetPipettingState("DispensePrerinsingMixVolume", 10);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.water, ML_STAR.QC_NegPos, 1, 1, 2, 0, 2, hslInfinite, hslInfinite, 1, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", -1);
  PTL::SetPipettingState("InitializeChannelVariable", "");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
  PTL::SetPipettingState("TipEjectChannelVariable", "");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 1);
  PTL::SetPipettingState("AspirateChannelVariable", "");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseSurface_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseSubmergeDepth", 1);
  PTL::SetPipettingState("DispenseChannelVariable", "");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 5);
  PTL::SetPipettingState("DispenseFluidHeight", 0);
  PTL::SetPipettingState("DispenseMode", 3);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseSurface_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  PTL::SetPipettingState("DispensePrerinsingMixCycles", 1);
  PTL::SetPipettingState("DispensePrerinsingMixPosition", 1);
  PTL::SetPipettingState("DispensePrerinsingMixVolume", 10);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.PositiveControl, ML_STAR.QC_PosPos, 1, 1, 2, 0, 1, hslInfinite, hslInfinite, 1, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", -1);
  PTL::SetPipettingState("InitializeChannelVariable", "");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
  PTL::SetPipettingState("TipEjectChannelVariable", "");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 1);
  PTL::SetPipettingState("AspirateChannelVariable", "");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolumeAcetonitrilDispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 1);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolumeAcetonitrilDispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.Mineral_Oil, ML_STAR.QC_Pos, 1, 1, 10, 0, 2, hslInfinite, hslInfinite, hslInfinite, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
}

private function OnStart(  ) void {
  heaterID = 1;
  HSLHamHeaterShaker::CreateStarDevice(ML_STAR, 2, heaterID);
  HSLHamHeaterShaker::StartTempCtrl(heaterID, 68, 0);
  EASYPICK::INIT::Init(ML_STAR, 1, 1);
  EASYPICK_HELPER::EasyStep_Init(ML_STAR, EASYPICK::_HSLTRUE);
}

private function QCAliquotMiniOldV1(  ) void {
  ML_STAR.QC_Plate_Col_1.SetCount(2);
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", -1);
  PTL::SetPipettingState("InitializeChannelVariable", "");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
  PTL::SetPipettingState("TipEjectChannelVariable", "");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 2);
  PTL::SetPipettingState("AspirateChannelVariable", "");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -9);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 5);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -10);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -10);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.MasterMixX8, ML_STAR.QC_Plate_Col_1, 1, 1, 20, 0, 2, hslInfinite, hslInfinite, 1, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  ML_STAR.QC_Plate_Col_1.SetCurrentPosition(1);
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", -1);
  PTL::SetPipettingState("InitializeChannelVariable", "");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
  PTL::SetPipettingState("TipEjectChannelVariable", "");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 2);
  PTL::SetPipettingState("AspirateChannelVariable", "");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 5);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.QC_Plate_Col_1, ML_STAR.QC_Plate_Col_5, 1, 1, 2, 0, 1, hslInfinite, hslInfinite, 1, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
  if(0){
  }
  PTL::ResetPipettingStateAndSequences("");
  PTL::SetPipettingState("UserResponseTime", hslInfinite);
  PTL::SetPipettingState("ErrorHandling", 3);
  PTL::SetPipettingState("TipCountingEnabled", hslFalse);
  PTL::SetPipettingState("TipCountingIdentifier", "");
  PTL::SetPipettingState("CopyPatternEnabled", hslFalse);
  PTL::SetPipettingState("ExcludeErrorPositionsEnabled", hslFalse);
  PTL::SetPipettingState("CalibrateCarrierChannel", -1);
  PTL::SetPipettingState("InitializeChannelVariable", "");
  PTL::SetPipettingState("InitializeEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupChannelVariable", "");
  PTL::SetPipettingState("TipPickupEnabled", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReloadable", hslTrue);
  PTL::SetPipettingState("TipPickupSequenceReducible", hslTrue);
  PTL::SetPipettingState("TipEjectChannelVariable", "");
  PTL::SetPipettingState("AspirateMode", 0);
  PTL::SetPipettingState("AspirateCLLDSensitivity", 5);
  PTL::SetPipettingState("AspirateFluidHeight", 0);
  PTL::SetPipettingState("AspirateSubmergeDepth", 2);
  PTL::SetPipettingState("AspirateChannelVariable", "");
  PTL::SetPipettingState("AspirateMaxHeightDiff", 0);
  PTL::SetPipettingState("AspiratePLLDSensitivity", 0);
  PTL::SetPipettingState("AspirateLiquidFollowing", hslTrue);
  PTL::SetPipettingState("AspirateUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("AspirateSequenceReloadable", hslFalse);
  PTL::SetPipettingState("AspirateSequenceReducible", hslFalse);
  PTL::SetPipettingState("AspirateSequenceCurrentInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("AspirateSequenceCountInitialization", -10);
  PTL::SetPipettingState("AspirateSequenceCountFinalization", -8);
  PTL::SetPipettingState("AspirateSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseSubmergeDepth", 0);
  PTL::SetPipettingState("DispenseChannelVariable", "");
  PTL::SetPipettingState("DispenseCLLDSensitivity", 0);
  PTL::SetPipettingState("DispenseFluidHeight", 5);
  PTL::SetPipettingState("DispenseMode", 1);
  PTL::SetPipettingState("DispenseLiquidFollowing", hslTrue);
  PTL::SetPipettingState("DispenseUserDefinedLiquidClass", "StandardVolume_Water_DispenseJet_Empty");
  PTL::SetPipettingState("DispenseSequenceReloadable", hslFalse);
  PTL::SetPipettingState("DispenseSequenceReducible", hslFalse);
  PTL::SetPipettingState("DispenseSequenceCurrentInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCurrentFinalization", -7);
  PTL::SetPipettingState("DispenseSequenceCountInitialization", -9);
  PTL::SetPipettingState("DispenseSequenceCountFinalization", -8);
  PTL::SetPipettingState("DispenseSequenceCalibration", hslTrue);
  PTL::SetPipettingState("DispenseRestVolumeDestination", 0);
  PTL::SetPipettingState("DispenseRestVolumeToAspirateSequenceSurface", hslFalse);
  PTL::SetPipettingState("DispenseRestVolumeFluidHeight", 0);
  if( 0 == PTL::Pipette(ML_STAR, ML_STAR.ST_L_NE_stack_0001, ML_STAR.PositiveControl, ML_STAR.QC_Plate_Col_1, 1, 1, 4, 0, 1, hslInfinite, hslInfinite, 1, "") )
  {
        PTL::RaiseRuntimeError(-1573650176, PTL::IDS::smartStepPipette, PTL::IDS::smartStepFailed, "HxGRUCompCmd");
  }
}
